OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = /home/dmitryneuro/Documents/FreeEEG32-alpha1.5/OpenVIBE/gdf/record-[2019.09.12-05.18.00].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = Fp1;AF7;AF3;F1;F3;F5;F7;FT7;FC5;FC3;FC1;C1;C3;C5;T7;TP7;CP5;CP3;CP1;P1;P3;P5;P7;P9;PO7;PO3;O1;Iz;Oz;POz;Pz;CPz
Data=#2 -> Signal display "raw"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#2 -> Temporal Filter => #4
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 256
  Band Pass Ripple (dB) = 0.5
Data=#4 -> Signal display "1-256 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 60
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#2 -> Temporal Filter => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8.000000
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Data=#6 -> Signal display "8-12 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.EEG stream -> Channel Selector "33:64"
  Channel List = 33:64
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #9
  New channel names = Fpz;Fp2;AF8;AF4;AFz;Fz;F2;F4;F6;F8;FT8;FC6;FC4;FC2;FCz;Cz;C2;C4;C6;T8;TP8;CP6;CP4;CP2;P2;P4;P6;P8;P10;PO8;PO4;O2
Input 1=#2, Input 2=#9 -> 0x341d3912 Signal Merger => #10
Signal=#10 -> 0x341d3912 GDF file writer
  Filename = /home/dmitryneuro/Documents/FreeEEG32-alpha1.5/OpenVIBE/gdf/record-[$core{date}-$core{time}].gdf
Data=#9 -> Signal display "raw"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#9 -> Temporal Filter => #13
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 256
  Band Pass Ripple (dB) = 0.5
Data=#13 -> Signal display "1-256 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 60
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#9 -> Temporal Filter => #15
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8.000000
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Data=#15 -> Signal display "8-12 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
