OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Temporal filtering
  We remove the 50 Hz noise with a notch filter
  and select only the frequency range between
  1 and 40 Hz.
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Topographies
  We display the alpha band power
  on a 2D and a 3D map
Comment
  Spatial filter
  We compute the surface Laplacians
  around C3 and C4.
Comment
  Spectral analysis
  The decimation downsamples the
  signal from 512 Hz to 64 Hz.
  The spectrum is thus computed up to 32Hz

0x341d3912 Acquisition client
  Acquisition server hostname = 192.168.1.81
  Acquisition server port = 1024

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "1:33"
  Channel List = 1:33
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "2:8;10:16;18:24;26:32;1;9;17;25;33"
  Channel List = 2:8;10:16;18:24;26:32;1;9;17;25;33
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;0;0;0;0;0;0;0;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1
  Number of Output Channels = 33
  Number of Input Channels = 33
  Filter matrix file =
-> Channel Rename => #5
  New channel names = Fp1;Fp2;AF3;AF4;F7;F8;F3;F4;FC1;FC2;FC5;FC6;T7;T8;C3;C4;CP1;CP2;CP5;CP6;P7;P8;P3;P4;PO3;PO4;O1;O2;Pz;Oz;Fz;Cz;aux
-> Channel Selector "Fp1;AF3;F7;F3;FC1;FC5;T7;C3;CP1;CP5;P7;P3;Pz;PO3;O1;Oz;O2;PO4;P4;P8;CP6;CP2;C4;T8;FC6;FC2;F4;F8;AF4;Fp2;Fz;Cz" => #6
  Channel List = Fp1;AF3;F7;F3;FC1;FC5;T7;C3;CP1;CP5;P7;P3;Pz;PO3;O1;Oz;O2;PO4;P4;P8;CP6;CP2;C4;T8;FC6;FC2;F4;F8;AF4;Fp2;Fz;Cz
  Action = Select
  Channel Matching Method = Smart
Experiment information=#1.Experiment information, Signal=#6, Stimulation=#1.Stimulations -> GDF file writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/gdf/record-[$core{date}-$core{time}].gdf
#6 -> Temporal filter "Notch 50Hz"
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
-> Temporal filter "1-40 Hz" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> 0x341d3912 Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
#9 -> 0x341d3912 Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> 0x341d3912 Channel Rename
  New channel names = L.C3;L.C4
#9 -> Temporal filter "8-15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #17
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#17 -> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.03
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#9 -> Signal
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColor}
#9 -> Temporal filter "8-30 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 8
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .0625
-> Spectral Analysis => #24
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#24.Amplitude -> Epoch average => #25
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 5
Matrix=#25 -> T/F Analysis
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Gain = 0.01
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#25 -> Spectrum
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.01
  Caption =
  Tranlucency = 1.000000
  Color = ${AdvancedViz_DefaultColorGradient}
#5 -> 0x341d3912 Signal Cleanup
  LowCutFrequency = 1
  HighCutFrequency = 100
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> 0x341d3912 Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5

0x341d3912 Generic stream reader
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
