PsychoPy2experiment version="3.0.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = gaped_3
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Each Frame:
        import socket
        import struct
        SERVER = "127.0.0.1"
        PORT = 15361
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client.connect((SERVER, PORT))
        if frameN == 0:
         client.sendall(struct.pack('qqq',0x00000000,0x00008100+thisTrial['Trial'],0x00000000))
        else:
         client.sendall(struct.pack('qqq',0x00000000,thisTrial['Valence'],0x00000000))
        #client.sendall(struct.pack('qqq',0x00000000,0x10000*thisTrial['Valence']+0x1000000*thisTrial['Arousal']+thisTrial['Trial'],0x00000000))
        #client.sendall(struct.pack('qqq',0x00000000,frameN,0x00000000))
        #data =  client.recv(1024)
        #print(data.decode())
        client.close()
    ImageComponent image
      image [set every frame] = $File
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:255
    conditionsFile = /home/dmitryneuro/Documents/emotions connectivity/gaped.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('File', 'GAPED/all_jpg/Sp088.jpg'), ('Valence', 53.1), ('Arousal', 52.275), ('Internal_norms', None), ('External_norms', None), ('rand', 0.9980368447), ('Eo_2', 1), ('Eo_3', 2), ('Eo_4', 3)]),
      OrderedDict([('File', 'GAPED/all_jpg/P080.jpg'), ('Valence', 94.32799999999999), ('Arousal', 11.623), ('Internal_norms', None), ('External_norms', None), ('rand', 0.9947843608), ('Eo_2', 0), ('Eo_3', 0), ('Eo_4', 2)]),
      OrderedDict([('File', 'GAPED/all_jpg/Sn052.jpg'), ('Valence', 37.561), ('Arousal', 59.056999999999995), ('Internal_norms', None), ('External_norms', None), ('rand', 0.9737908255), ('Eo_2', 1), ('Eo_3', 1), ('Eo_4', 3)]),
      OrderedDict([('File', 'GAPED/all_jpg/Sp016.jpg'), ('Valence', 38.148), ('Arousal', 43.483000000000004), ('Internal_norms', None), ('External_norms', None), ('rand', 0.9707484556999999), ('Eo_2', 1), ('Eo_3', 1), ('Eo_4', 3)]),
      OrderedDict([('File', 'GAPED/all_jpg/H037.jpg'), ('Valence', 8.019), ('Arousal', 82.656), ('Internal_norms', 7.609696822), ('External_norms', 8.660736084), ('rand', 0.9688284765999999), ('Eo_2', 1), ('Eo_3', 1), ('Eo_4', 3)]),
      OrderedDict([('File', 'GAPED/all_jpg/Sn092.jpg'), ('Valence', 50.906000000000006), ('Arousal', 50.309), ('Internal_norms', None), ('External_norms', None), ('rand', 0.9585446392), ('Eo_2', 1), ('Eo_3', 0), ('Eo_4', 3)])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
    Routine trial
  LoopTerminator trials
