OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = /home/dmitryneuro/Documents/emotions connectivity/gdf/record-[2019.01.29-06.43.24].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "AF3;AF4;F3;F4"
  Channel List = AF3;AF4;F3;F4
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = AF3;AF4;F3;F4
Data=#2, Stimulations=#0.Stimulations -> Signal display "Input signal raw"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#2 -> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 128
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .001953125
-> Spectral Analysis => #6
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#6.Amplitude -> Frequency Band Selector
  Frequencies to select = 1:128
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 5
-> Spectrum Average => #9
  Considers zeros = false
-> Channel Selector "F3" => #10
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#9 -> Channel Selector "F4" => #11
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
#9 -> Channel Selector "AF3" => #12
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
#9 -> Channel Selector "AF4" => #13
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
Data=#4, Stimulations=#0.Stimulations -> Signal display "1-128 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#2 -> Signal Cleanup => #15
  LowCutFrequency = 1
  HighCutFrequency = 128
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> 0x341d3912 0xc73e83ec Temporal filter "1-128 Hz" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 128
  Pass band ripple (dB) = 0.5
Data=#16 -> 0x341d3912 0xc73e83ec Signal display "1-128 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#15 -> Temporal filter => #18
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .001953125
-> Spectral Analysis => #20
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#20.Amplitude -> Frequency Band Selector
  Frequencies to select = 8:12
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 5
-> Spectrum Average => #23
  Considers zeros = false
-> Channel Selector "F3" => #24
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#23 -> Channel Selector "F4" => #25
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
Input - A=#25, Input - B=#24 -> 0x341d3912 0xc73e83ec Simple DSP "Valence=α(F4)-α(F3)" => #26
  Equation = a-b
Data=#26 -> 0x341d3912 0xc73e83ec Signal display "Valence=α(F4)-α(F3)"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#26 -> 0x341d3912 0xc73e83ec Matrix Display "Valence=α(F4)-α(F3)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#23 -> Channel Selector "AF3" => #29
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
#23 -> Channel Selector "AF4" => #30
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
Input - A=#24, Input - B=#25, Input - C=#29, Input - D=#30, Input - E=#10, Input - F=#11, Input - G=#12, Input - H=#13 -> 0x341d3912 0xc73e83ec Simple DSP "Reliability=(αF3+αF4+αAF3+αAF4)-(F3+F4+AF3+AF4)" => #31
  Equation = (a+b+c+d)-(e+f+g+h)
Data=#31 -> 0x341d3912 0xc73e83ec Signal display "Reliability=(αF3+αF4+αAF3+αAF4)/(F3+F4+AF3+AF4)"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#24, Input - B=#25, Input - C=#29, Input - D=#30, Input - E=#10, Input - F=#11, Input - G=#12, Input - H=#13 -> 0x341d3912 0xc73e83ec Simple DSP "Reliability=(αF3+αF4+αAF3+αAF4)/(F3+F4+AF3+AF4)-1" => #33
  Equation = (a+b+c+d)/(e+f+g+h)-1
-> 0x341d3912 0xc73e83ec Matrix Display "Reliability=(αF3+αF4+αAF3+αAF4)/(F3+F4+AF3+AF4)-1"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#33 -> 0x341d3912 0xc73e83ec Signal display "Reliability=(αF3+αF4+αAF3+αAF4)/(F3+F4+AF3+AF4)-1"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 4
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#18, Stimulations=#0.Stimulations -> Signal display "8-12 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#15 -> Temporal filter => #37
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 28
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .001953125
-> Spectral Analysis => #39
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#39.Amplitude -> Frequency Band Selector
  Frequencies to select = 12:28
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 5
-> Spectrum Average => #42
  Considers zeros = false
-> Channel Selector "F3" => #43
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#42 -> Channel Selector "F4" => #44
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
Input - A=#25, Input - B=#44, Input - C=#24, Input - D=#43 -> Simple DSP "Valence=α(F4)/β(F4)-α(F3)/β(F3)" => #45
  Equation = a/b-c/d
Input stream=#45, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/record-[$core{date}-$core{time}]_0.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#45 -> 0x341d3912 0xc73e83ec Level measure
Data=#45, Stimulations=#0.Stimulations -> Signal display "Valence=α(F4)/β(F4)-α(F3)/β(F3)"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 4
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#45 -> 0x341d3912 Matrix Display "Valence=α(F4)/β(F4)-α(F3)/β(F3)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#45 -> 0x341d3912 TCP Writer
  Port = 5679
  Output format = Raw
#42 -> Channel Selector "AF3" => #51
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
#42 -> Channel Selector "AF4" => #52
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
Input - A=#43, Input - B=#44, Input - C=#51, Input - D=#52, Input - E=#10, Input - F=#11, Input - G=#12, Input - H=#13 -> 0x341d3912 0xc73e83ec Simple DSP "Reliability=(βF3+βF4+βAF3+βAF4)-(F3+F4+AF3+AF4)" => #53
  Equation = (a+b+c+d)-(e+f+g+h)
Data=#53 -> 0x341d3912 0xc73e83ec Signal display "Reliability=(βF3+βF4+βAF3+βAF4)-(F3+F4+AF3+AF4)"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#43, Input - B=#44, Input - C=#51, Input - D=#52, Input - E=#10, Input - F=#11, Input - G=#12, Input - H=#13 -> Simple DSP "Reliability=(βF3+βF4+βAF3+βAF4)/(F3+F4+AF3+AF4)-1" => #55
  Equation = (a+b+c+d)/(e+f+g+h)-1
Input stream=#55, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/record-[$core{date}-$core{time}]_5.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#55 -> 0x341d3912 Matrix Display "Reliability=(βF3+βF4+βAF3+βAF4)/(F3+F4+AF3+AF4)-1"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#55, Stimulations=#0.Stimulations -> Signal display "Reliability=(βF3+βF4+βAF3+βAF4)/(F3+F4+AF3+AF4)-1"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 4
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#55 -> 0x341d3912 TCP Writer
  Port = 5681
  Output format = Raw
Input - A=#45, Input - B=#55 -> Simple DSP "(b>0?a:-20)" => #60
  Equation = (b>0?a:-5)
Input stream=#60, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/record-[$core{date}-$core{time}]_3.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input - A=#29, Input - B=#30, Input - C=#24, Input - D=#25, Input - E=#43, Input - F=#44, Input - G=#51, Input - H=#52 -> Simple DSP "Arousal=(βF3+βF4+βAF3+βAF4)/(αF3+αF4+αAF3+αAF4)-1" => #62
  Equation = (e+f+g+h)/(a+b+c+d)-1
Input stream=#62, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/record-[$core{date}-$core{time}]_1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#62 -> 0x341d3912 Matrix Display "Arousal=(βF3+βF4+βAF3+βAF4)/(αF3+αF4+αAF3+αAF4)-1"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#62, Stimulations=#0.Stimulations -> Signal display "Arousal=(βF3+βF4+βAF3+βAF4)/(αF3+αF4+αAF3+αAF4)-1"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 4
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input stream 1=#45, Input stream 2=#62, Input stream 3=#55 -> 0x341d3912 Streamed matrix multiplexer => #66
-> 0x341d3912 0xc73e83ec OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /a/b/c
#66 -> 0x341d3912 TCP Writer
  Port = 5678
  Output format = Raw
Input 1=#45, Input 2=#62, Input 3=#55 -> 0x341d3912 0xc73e83ec Analog VRPN Server
  Peripheral name = openvibe-vrpn
#62 -> 0x341d3912 TCP Writer
  Port = 5680
  Output format = Raw
Input - A=#62, Input - B=#55 -> Simple DSP "(b>0?a:-20)" => #71
  Equation = (b>0?a:-5)
Input stream=#71, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/record-[$core{date}-$core{time}]_4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream 1=#60, Input stream 2=#71 -> Feature aggregator => #73
-> Continuous XYZ Plot
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Gain = 0.5
  Caption =
  Translucency = 2.000000
  Show Axis = true
  Use third channel as depth = false
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#73, Markers=#0.Stimulations -> Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.2500000
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#37, Stimulations=#0.Stimulations -> Signal display "12-28 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input stream=#2, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = /home/dmitryneuro/Documents/emotions connectivity/record-[$core{date}-$core{time}]_2.csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 Channel Selector "4:7"
  Channel List = 4:7
  Action = Select
  Channel Matching Method = Smart

0x341d3912 Acquisition client "orangepi"
  Acquisition server hostname = 192.168.43.226
  Acquisition server port = 1024

0x341d3912 Acquisition client "orangepi"
  Acquisition server hostname = 192.168.88.24
  Acquisition server port = 1024

0x341d3912 0xc73e83ec Acquisition client => #81
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#81.Signal stream -> 0x341d3912 Channel Selector "12:15"
  Channel List = 12:15
  Action = Select
  Channel Matching Method = Smart
#81.Signal stream -> 0x341d3912 Channel Selector "20:23"
  Channel List = 20:23
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Channel Rename => #84
  New channel names = AF3;AF4;F3;F4
Data=#84 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Signal=#84 -> 0x341d3912 0xc73e83ec GDF file writer "orangepi"
  Filename = /home/orangepi/pjatnica/record-[$core{date}-$core{time}].gdf
Signal=#84 -> 0x341d3912 0xc73e83ec GDF file writer
  Filename = /home/dmitryneuro/Documents/emotions recognition/record-[$core{date}-$core{time}].gdf
#81.Signal stream -> 0x341d3912 Channel Selector "17:24" => #88
  Channel List = 17:24
  Action = Select
  Channel Matching Method = Smart
Data=#88 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#88 -> 0x341d3912 Temporal filter => #90
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 128
  Pass band ripple (dB) = 0.5
Data=#90 -> 0x341d3912 Signal display "1-128 Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false

0x341d3912 Channel Selector "4:7"
  Channel List = 4:7
  Action = Select
  Channel Matching Method = Smart

0x341d3912 GDF file reader
  Filename = /media/dmitryneuro/2011v3/pjatnica/record-[2018.08.18-05.17.52].gdf
  Samples per buffer = 32
  Subtract physical minimum = false

0x341d3912 Reference Channel
  Channel = Ref_Nose
  Channel Matching Method = Smart

Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = 0x00010000
  Stimulation range end = 0x00020000

0x341d3912 0xc73e83ec Matrix Display "Reliability=(βF3+βF4+βAF3+βAF4)-(F3+F4+AF3+AF4)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

0x341d3912 0xc73e83ec Matrix Display "Reliability=(αF3+αF4+αAF3+αAF4)-(F3+F4+AF3+AF4)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
