OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 Noise generator
  Channel count = 32
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> 0x341d3912 Simple DSP
  Equation = x*10

0x341d3912 GDF file reader
  Filename = /home/dmitryneuro/Documents/FreeEEG32-alpha1.5/OpenVIBE/gdf/record-[2019.11.13-22.23.59].gdf
  Samples per buffer = 32
  Subtract physical minimum = false

Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#3.Signal stream -> Channel Selector "F3" => #4
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 7
  Band Pass Ripple (dB) = 0.5
-> 0x341d3912 Zero-Crossing Detector => #6
  Hysteresis threshold = 0.01
  Rythm estimation window (in sec) = 10
  Negative-to-positive stimulation = OVTK_StimulationId_ThresholdPassed_Positive
  Positive-to-negative stimulation = OVTK_StimulationId_ThresholdPassed_Negative
#6.Events rythm (per min) -> 0x341d3912 Simple DSP => #7
  Equation = a/60
Data=#7 -> 0x341d3912 Signal display "zero-cross"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#5, Stimulations=#6.Zero-crossing stimulations -> 0x341d3912 Signal display "4-7Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#4 -> 0x341d3912 Temporal Filter => #10
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Input - A=#10, Input - B=#5 -> 0x341d3912 Simple DSP
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3
#4 -> 0x341d3912 Temporal Filter => #13
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 28
  Band Pass Ripple (dB) = 0.5
Input - A=#13, Input - B=#5 -> 0x341d3912 Simple DSP => #14
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3
Data=#13 -> 0x341d3912 Signal display "13-28Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#4 -> Temporal Filter => #17
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 47
  Band Pass Ripple (dB) = 0.5
-> 0x341d3912 Zero-Crossing Detector => #18
  Hysteresis threshold = 0.001
  Rythm estimation window (in sec) = 10
  Negative-to-positive stimulation = OVTK_StimulationId_ThresholdPassed_Positive
  Positive-to-negative stimulation = OVTK_StimulationId_ThresholdPassed_Negative
#18.Events rythm (per min) -> 0x341d3912 Simple DSP => #19
  Equation = a/60
Data=#19 -> 0x341d3912 Signal display "zero-cross"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#17, Input - B=#5 -> Simple DSP => #21
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /theta-gamma-F3
#21 -> 0x341d3912 TCP Writer
  Port = 1337
  Output format = Raw
Data=#21, Stimulations=#6.Zero-crossing stimulations -> 0x341d3912 Signal display "30-47Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Triggers=#6.Zero-crossing stimulations, Matrix=#17 -> 0x341d3912 Stream Switch => #25
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
#25.Output -> 0x341d3912 Simple DSP
  Equation =
#25.Output -> 0x341d3912 TCP Writer
  Port = 1337
  Output format = Raw
Data=#25.Output -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#17, Stimulations=#6.Zero-crossing stimulations -> 0x341d3912 Signal display "30-47Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#17, Input - B=#5 -> 0x341d3912 Simple DSP => #30
  Equation = (b>0)*(a>0)*a
-> 0x341d3912 TCP Writer
  Port = 1337
  Output format = Raw
Data=#30, Stimulations=#6.Zero-crossing stimulations -> 0x341d3912 Signal display "30-47Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Triggers=#6.Zero-crossing stimulations, Matrix=#30 -> 0x341d3912 Stream Switch => #33
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_ThresholdPassed_Positive
  Switch stim for output 2 = OVTK_StimulationId_ThresholdPassed_Negative
Data=#33.Output(1), Stimulations=#6.Zero-crossing stimulations -> 0x341d3912 Signal display "30-47Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#33.Output, Stimulations=#6.Zero-crossing stimulations -> 0x341d3912 Signal display "30-47Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#3.Signal stream -> Channel Selector "F4" => #36
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #37
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 7
  Band Pass Ripple (dB) = 0.5
Data=#37 -> 0x341d3912 Signal display "4-7Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#36 -> 0x341d3912 Temporal Filter => #39
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Input - A=#39, Input - B=#37 -> 0x341d3912 Simple DSP
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4
#36 -> 0x341d3912 Temporal Filter => #42
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 28
  Band Pass Ripple (dB) = 0.5
Input - A=#42, Input - B=#37 -> 0x341d3912 Simple DSP => #43
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4
Input 1=#14, Input 2=#43 -> 0x341d3912 Signal Merger => #45
Data=#45 -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#42 -> 0x341d3912 Signal display "13-28Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#36 -> Temporal Filter => #48
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 47
  Band Pass Ripple (dB) = 0.5
Input - A=#48, Input - B=#37 -> Simple DSP => #49
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9011
  OSC Address = /theta-gamma-F4
Input 1=#21, Input 2=#49 -> Signal Merger => #51
Data=#51 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false

0x341d3912 Simple DSP
  Equation = (a>0)*a

0x341d3912 IFFT
0x341d3912 Feature aggregator
