OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 Noise generator
  Channel count = 32
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> 0x341d3912 Simple DSP
  Equation = x*10

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Channel Selector "Fp1;Fp2;F3;F4;P3;P4;O1;O2" => #3
  Channel List = Fp1;Fp2;F3;F4;P3;P4;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #4
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 7
  Band Pass Ripple (dB) = 0.5
Data=#4 -> 0x341d3912 Signal display "4-7Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#3 -> 0x341d3912 Temporal Filter => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Input - A=#6, Input - B=#4 -> 0x341d3912 Simple DSP => #7
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> 0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3
#7 -> 0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4
#3 -> 0x341d3912 Temporal Filter => #12
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 28
  Band Pass Ripple (dB) = 0.5
Data=#12 -> 0x341d3912 Signal display "13-28Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#12, Input - B=#4 -> 0x341d3912 Simple DSP => #14
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
Data=#14 -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#14 -> 0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3
#14 -> 0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4
#3 -> Temporal Filter => #20
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 47
  Band Pass Ripple (dB) = 0.5
Input - A=#20, Input - B=#4 -> Simple DSP => #21
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
Data=#21 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 5
  Time Scale = 5
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#21 -> 0x341d3912 Channel Selector "Fp1"
  Channel List = Fp1
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /theta-gamma-Fp1
#21 -> 0x341d3912 Channel Selector "Fp2"
  Channel List = Fp2
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9011
  OSC Address = /theta-gamma-Fp2
#21 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9101
  OSC Address = /theta-gamma-F3
#21 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9111
  OSC Address = /theta-gamma-F4
#21 -> 0x341d3912 Channel Selector "P3"
  Channel List = P3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9201
  OSC Address = /theta-gamma-P3
#21 -> 0x341d3912 Channel Selector "P4"
  Channel List = P4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9211
  OSC Address = /theta-gamma-P4
#21 -> 0x341d3912 Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9301
  OSC Address = /theta-gamma-O1
#21 -> 0x341d3912 Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9311
  OSC Address = /theta-gamma-O2

0x341d3912 GDF file reader
  Filename = /home/dmitryneuro/Documents/FreeEEG32-alpha1.5/OpenVIBE/gdf/record-[2019.11.13-22.23.59].gdf
  Samples per buffer = 32
  Subtract physical minimum = false

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart

0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart

0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart

0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4
