OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = /home/dmitryneuro/Documents/theta&gamma2octave/record-[2020.06.28-14.26.09].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
#0.EEG stream -> Channel Selector "Fp1;Fp2;F3;F4;P3;P4;O1;O2" => #2
  Channel List = Fp1;Fp2;F3;F4;P3;P4;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = a*a
-> Signal Decimation
  Decimation factor = 8
-> Simple DSP => #5
  Equation = sqrt(a)
#2 -> Temporal Filter => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 7
  Band Pass Ripple (dB) = 0.5
Data=#6 -> 0x341d3912 Signal display "4-7Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#2 -> 0x341d3912 Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Input - A=#8, Input - B=#6 -> 0x341d3912 Simple DSP => #9
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
-> 0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3
#9 -> 0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4
#2 -> 0x341d3912 Temporal Filter => #14
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 28
  Band Pass Ripple (dB) = 0.5
Data=#14 -> 0x341d3912 Signal display "13-28Hz"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#14, Input - B=#6 -> 0x341d3912 Simple DSP => #16
  Equation = (b>0)*(a>0)*a+(b<=0)*(-1)
Data=#16 -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#16 -> 0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3
#16 -> 0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4
#2 -> Temporal Filter => #22
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 47
  Band Pass Ripple (dB) = 0.5
-> Simple DSP
  Equation = a*a
-> Signal Decimation
  Decimation factor = 8
-> Simple DSP => #25
  Equation = sqrt(a)
Input - A=#5, Input - B=#25 -> Simple DSP => #26
  Equation = b/a
Data=#26 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15.000000
  Vertical Offset = 0.000000
  Time Scale = 5
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#22, Input - B=#6 -> Simple DSP => #28
  Equation = (b>0)*(a>0)*a+(b<=0)*b
Data=#28 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 15.000000
  Vertical Offset = 0.000000
  Time Scale = 5
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#28 -> Channel Selector "Fp1"
  Channel List = Fp1
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /theta-gamma-Fp1
#28 -> Channel Selector "Fp2"
  Channel List = Fp2
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9011
  OSC Address = /theta-gamma-Fp2
#28 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9101
  OSC Address = /theta-gamma-F3
#28 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9111
  OSC Address = /theta-gamma-F4
#28 -> Channel Selector "P3"
  Channel List = P3
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9201
  OSC Address = /theta-gamma-P3
#28 -> Channel Selector "P4"
  Channel List = P4
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9211
  OSC Address = /theta-gamma-P4
#28 -> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9301
  OSC Address = /theta-gamma-O1
#28 -> Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9311
  OSC Address = /theta-gamma-O2

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

0x341d3912 Noise generator
  Channel count = 32
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> 0x341d3912 Simple DSP
  Equation = x*10

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart

0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart

0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9002
  OSC Address = /theta-alpha-F3

0x341d3912 Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9003
  OSC Address = /theta-beta-F3

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9012
  OSC Address = /theta-alpha-F4

0x341d3912 Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart

0x341d3912 OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9013
  OSC Address = /theta-beta-F4
